PsychoPy2experiment version="2022.1.1"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2022
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = recall
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Study
    TextComponent text_8
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $word1
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    TextComponent text_9
      letterHeight = 0.1
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $word2
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    TextComponent text_10
      letterHeight = 0.15
      startVal [time (s)] = 4
      stopVal [duration (s)] = .5
      text = +
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  Routine Control_Task
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        from numpy.random import choice
    TextComponent text_4
      color = red
      letterHeight = 0.1
      pos = (0, .7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      text [set every repeat] = *** O? ***
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    TextComponent text_11
      letterHeight = 0.3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5.5
      text [set every repeat] = $nonword
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    TextComponent text_12
      letterHeight = 0.3
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Memory_Task
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from numpy.random import choice
    TextComponent text_3
      letterHeight = 0.3
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      text [set every repeat] = $word1
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    TextComponent text_6
      letterHeight = 0.3
      pos = (0, -0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $word2
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    TextComponent text_7
      letterHeight = 0.3
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = .5
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = All done, great job!
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  Routine Study_Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        In this task, you will see two words on the screen.

        Please try to create a story with the words to help you remember them together.

        Later, we will give you one of the words in the pair and asks you to recall the other.
  Routine Instructions
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Please read each word and silently recall the other word in the pair that you studied before the scan.

        If you see “*** O? ***” at the top of the screen:
        Respond YES if there is a letter “O” in the word.
        Respond NO if there is not a letter “O”.
Flow
  Routine Instructions
  LoopInitiator repeats loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $choice(10, size=5, replace=False)
      conditionsFile = word_pairs.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('word1', 'tractor'), ('word2', 'luggage')]),
        OrderedDict([('word1', 'helmet'), ('word2', 'waitress')]),
        OrderedDict([('word1', 'lotion'), ('word2', 'motel')]),
        OrderedDict([('word1', 'cabinet'), ('word2', 'password')]),
        OrderedDict([('word1', 'railroad'), ('word2', 'leather')]),
        OrderedDict([('word1', 'engine'), ('word2', 'canoe')]),
        OrderedDict([('word1', 'shopper'), ('word2', 'toaster')]),
        OrderedDict([('word1', 'tennis'), ('word2', 'chemist')]),
        OrderedDict([('word1', 'cabin'), ('word2', 'doorway')]),
        OrderedDict([('word1', 'timber'), ('word2', 'canyon')])]
      Routine Memory_Task
    LoopTerminator trials
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $choice(20, size=5, replace=False)
      conditionsFile = nonsense_words.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('nonword', 'boycher')]),
        OrderedDict([('nonword', 'ijanks')]),
        OrderedDict([('nonword', 'baylory')]),
        OrderedDict([('nonword', 'caimatizes')]),
        OrderedDict([('nonword', 'aeroporthd')]),
        OrderedDict([('nonword', 'pantatining')]),
        OrderedDict([('nonword', 'acterin')]),
        OrderedDict([('nonword', 'huggle')]),
        OrderedDict([('nonword', 'pecialmorals')]),
        OrderedDict([('nonword', 'thwided')]),
        OrderedDict([('nonword', 'geshlamp')]),
        OrderedDict([('nonword', 'rousur')]),
        OrderedDict([('nonword', 'kastat')]),
        OrderedDict([('nonword', 'untravents')]),
        OrderedDict([('nonword', 'phonalle')]),
        OrderedDict([('nonword', 'hamletive')]),
        OrderedDict([('nonword', 'excumble')]),
        OrderedDict([('nonword', 'grundrow')]),
        OrderedDict([('nonword', 'contle')]),
        OrderedDict([('nonword', 'lombined')])]
      Routine Control_Task
    LoopTerminator trials_2
  LoopTerminator repeats
  Routine End
