PsychoPy2experiment version="2022.1.1"
Settings
  Data file delimiter = comma
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'],  expName, expInfo['date'])
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2020.2
  Window size (pixels) = [1440, 900]
  color = $[-1,-1,-1]
  expName = study
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine Instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        When you see two words on the screen, create a story with the words to help you remember them together.

        Later, we will give you one of the words in the pair and ask you to recall the other.

        Press space to advance through the words.

        Press space to begin.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Word_Pairs
    TextComponent text_2
      letterHeight = 0.3
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word1
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    TextComponent text_3
      letterHeight = 0.3
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $word2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_5
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Good job!
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if 'space' in key_resp_4.keys:
            repeats.finished = True
    KeyboardComponent key_resp_4
      allowedKeys = 'r', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Practice_Test
    TextComponent text_6
      letterHeight = 0.3
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text [set every repeat] = $word1
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    TextComponent text_8
      letterHeight = 0.3
      pos = (0, -0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      text [set every repeat] = $word2
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    TextComponent text_9
      letterHeight = 0.3
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.5
      text = +
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  Routine Practice_Test_Instructions
    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Now you will have a chance to practice the word pairs you learned.

        When you see a word appear on the screen, say the word that was paired with it aloud.

        After several seconds, the correct answer will appear on the screen. Try to respond before the answer appears.

        Press the space bar to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = word_pairs.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('word1', 'tractor'), ('word2', 'luggage')]),
      OrderedDict([('word1', 'helmet'), ('word2', 'waitress')]),
      OrderedDict([('word1', 'lotion'), ('word2', 'motel')]),
      OrderedDict([('word1', 'cabinet'), ('word2', 'password')]),
      OrderedDict([('word1', 'railroad'), ('word2', 'leather')]),
      OrderedDict([('word1', 'engine'), ('word2', 'canoe')]),
      OrderedDict([('word1', 'shopper'), ('word2', 'toaster')]),
      OrderedDict([('word1', 'tennis'), ('word2', 'chemist')]),
      OrderedDict([('word1', 'cabin'), ('word2', 'doorway')]),
      OrderedDict([('word1', 'timber'), ('word2', 'canyon')])]
    Routine Word_Pairs
  LoopTerminator trials
  LoopInitiator repeats loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine Practice_Test_Instructions
    LoopInitiator trials_2 loopType="TrialHandler"
      conditionsFile = word_pairs.csv
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('word1', 'tractor'), ('word2', 'luggage')]),
        OrderedDict([('word1', 'helmet'), ('word2', 'waitress')]),
        OrderedDict([('word1', 'lotion'), ('word2', 'motel')]),
        OrderedDict([('word1', 'cabinet'), ('word2', 'password')]),
        OrderedDict([('word1', 'railroad'), ('word2', 'leather')]),
        OrderedDict([('word1', 'engine'), ('word2', 'canoe')]),
        OrderedDict([('word1', 'shopper'), ('word2', 'toaster')]),
        OrderedDict([('word1', 'tennis'), ('word2', 'chemist')]),
        OrderedDict([('word1', 'cabin'), ('word2', 'doorway')]),
        OrderedDict([('word1', 'timber'), ('word2', 'canyon')])]
      Routine Practice_Test
    LoopTerminator trials_2
    Routine End
  LoopTerminator repeats
